'CR1000X Series
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public Measure
Public Rain_in
Public CS65X(3)

Alias CS65X(1)=VWC
Alias CS65X(2)=EC
Alias CS65X(3)=T

Units BattV=Volts
Units PTemp_C=Deg C
Units Measure=in
Units Rain_in=inch
Units VWC=m^3/m^3
Units EC=dS/m
Units T=Deg C

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,5,Min,10)
	'The following TableFile instruction causes new data to be copied to an optional removable
	'drive (SC115 or USB mass storage) when it is plugged into the datalogger.
	'This TableFile instruction has no effect unless a removable drive is plugged into the datalogger.
	TableFile("USB:"+Status.SerialNumber+"Table1",8,-1,0,0,Hr,0,0)
	Average(1,Measure,FP2,False)
	Average(1,VWC,FP2,False)
	Average(1,EC,FP2,False)
	Average(1,T,FP2,False)
	Totalize(1,Rain_in,FP2,False)
	Maximum(1,Measure,FP2,False,True)
	Minimum(1,Measure,FP2,False,True)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(1,Sec,1,0)
		'Default CR1000X Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR1000X Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Generic 4-20 mA (2-wire with internal shunt and datalogger power) measurement 'Measure'
		CurrentSE(Measure,1,mV1000,RG1,True,0,60,4.6875,-14.75)
		'CS700 Rain Gauge measurement 'Rain_in'
		PulseCount(Rain_in,1,P1,1,0,0.01,0)
		'CS650/CS655 Water Content Reflectometer measurements 'VWC', 'EC', and 'T'
		If TimeIntoInterval(0,1,Hr) Then
			SDI12Recorder(CS65X(),C3,"0","M!",1,0,-1)
		EndIf
		'Call Data Tables and Store Data
		CallTable Table1
	NextScan
EndProg
